PsychoPy2experiment version="2022.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = change-your-mind
  keyboardBackend = ioHub
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Routines
  Routine first_round
    TextboxComponent fixation
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text = 1
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    TextboxComponent target
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text [set every repeat] = $'XXXX' + str(targetLetter) + 'XXX'
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  Routine code
    CodeComponent declarations
      Code Type = Auto->JS
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      Before Experiment:
        difficultTargetDuration = 0.06 # seconds

        def generateTargetString(targetLetter, isDifficult):
            lowerBound = 1 if isDifficult else 2
            upperBound = 6 if isDifficult else 5
            position = randint(lowerBound, upperBound)
            return position * 'X' + targetLetter + (7 - position) * 'X'

        def getTargetDuration(isDifficult):
            return difficultTargetDuration if isDifficult else 0.15

        def updateDifficultTargetDuration(wasCorrect):
            difficultTargetDuration += -0.01 if wasCorrect else 0.01
            if difficultTargetDuration > 0.15:
                difficultTargetDuration = 0.15
            elif difficultTargetDuration < 0.01:
                difficultTargetDuration = 0.01

        # generates a random duration in seconds from lowerBound to upperBound
        # lowerBound and upperBound cannot have more than one decimal place.
        def randomDelay(lowerBound, upperBound):
            lowerBoundDec = lowerBound * 10
            upperBoundDec = upperBound * 10
            randomDelayDec = randint(lowerBoundDec,upperBoundDec)
            return randomDelayDec / 10
Flow
  Routine code
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = random
    nReps = 8
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    conditions:
      [OrderedDict([('targetLetter', 'T'), ('difficulty', 'easy')]),
      OrderedDict([('targetLetter', 'L'), ('difficulty', 'hard')]),
      OrderedDict([('targetLetter', 'L'), ('difficulty', 'hard')]),
      OrderedDict([('targetLetter', 'L'), ('difficulty', 'hard')]),
      OrderedDict([('targetLetter', 'T'), ('difficulty', 'hard')]),
      OrderedDict([('targetLetter', 'T'), ('difficulty', 'hard')]),
      OrderedDict([('targetLetter', 'T'), ('difficulty', 'hard')])]
    Routine first_round
  LoopTerminator trials
